OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.0)
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Overview

  This scenario can be used online once the
  classifiers is trained.

  note: the recorded files go to the
  folder where the scenario xml is located
  (${Player_ScenarioDirectory}/).
Comment
  The preprocessing of this scenario consists
  in re-referencing all the channels to the
  channel 2 (which was located on the nose) and
  to select the 10 channels over the motor cortex
  of the hands. The Spatial Filter box computes
  a surface laplacian filter and reduces the output
  to two channels: one on the left and one on the right.

  note: depending on your acquisition device,
  you may have to tune this part of the scenario

  note: whatever change you do on this
  scenario, don't forget to do the same on the
  classifier trainer scenario
Comment
  Then comes the feature extraction part.

  The signal is filtered in the alpha/beta [8 24] Hz range.
  The filtered signal is then splitted in blocks of 1 second
  every 16th second and the logarithmic band power is
  computed thanks to the two Simple DSP and
  the Signal Average boxes.

  The matrices can then be converted in feature vectors.

  note: depending on what frequency range
  reacts best for the subject, you may have to tune
  this part of the scenario

  note: whatever change you do on this
  scenario, don't forget to do the same on the
  classifier trainer scenario
Comment
  Finally, the feature vectors are classifier with an LDA
  classifier. Note that the state vector of the classifier
  (which in the case of the LDA is the distance to the
  separation plane) is sent to the Graz Visulization
  box for feedback !

  In order to display correct feedback,
  the Graz Visulization box expects a negative
  value for one class and a positive value for the other
  class.

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 1=#0.Experiment information, Input stream 2=#0.Signal stream, Input stream 3=#0.Stimulations -> Identity => #1
Input stream 1=#1.Output stream 1, Input stream 2=#1.Output stream 2, Input stream 3=#1.Output stream 3 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/record-[$core{date}-$core{time}].ov
  Use compression = false
#1.Output stream 2 -> Reference Channel
  Channel = Nz
  Channel Matching Method = Smart
-> Channel Selector "7;9;5;3;6;13;11;10;14;16"
  Channel List = 7;9;5;3;6;13;11;10;14;16
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter "Surface Laplacian"
  Spatial Filter Coefficients = 4;0;-1;0;-1;-1;0;0;-1;0;0;4;0;-1;0;0;-1;-1;0;-1
  Number of Output Channels = 2
  Number of Input Channels = 10
  Filter matrix file =
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.000000
  High cut frequency (Hz) = 24.000000
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #11
Features=#11 -> Classifier processor => #12
  Filename to load configuration from = ${Player_ScenarioDirectory}/motor-imagery-bci-config-classifier.cfg
#12.Hyperplane distance -> Simple DSP
  Equation = x
-> Sign Change Detector => #14
  Sign switch to positive stimulation = OVTK_StimulationId_Label_01
  Sign switch to negative stimulation = OVTK_StimulationId_Label_00
  Channel Index = 1
-> 0xc67a01dc TCP Writer
  Port = 4000
  Stimulus output = String
#14 -> Stimulation listener
  Log level to use = Information
