PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [800, 600]
  Full-screen window = False
  Experiment info = {u'participant': u''}
  Save wide csv file = False
  expName = Finger_movement
  Units = pix
  Screen = 1
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Routines
  Routine pause
    TextComponent pause_text
      color = $[0,0,0]
      text = Press the spacebar when you're ready to continue the experiment
      startVal [time (s)] = 0.0
      letterHeight = 30
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    KeyboardComponent spacebar
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end
    TextComponent text_end
      stopVal [duration (s)] = 4
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        The experiment is over.
        Tank you for participating!
    CodeComponent stopEEG
      Begin Experiment:
        ser.write("255".encode()) # PauseOn
    CodeComponent closeSerial
      Begin Experiment:
        ser.close()
  Routine instr
    TextComponent task_instr
      startVal [time (s)] = 0.0
      letterHeight = 20
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      text:
        Merci de participer a cette experience.

        La tache consiste a faire des mouvements d'elevation des doigts.
        Chaque essai commence lorsque vous entendez un beep sonore. Ensuite vous etes libre de bouger quand vous voulez: c'est vous qui choisissez le moment de realiser le mouvement. Attendez cependant au moins 5 secondes apres le debut de l'essai.

        Lorsque vous avez realise un mouvement, attendez le prochain signal sonore avant d'en refaire un nouveau. Il y a seulement un mouvement a faire par essai.

        Il y aura 3 pauses pendant l'experience.

        Lorsque vous etes pret(e), appuyez sur la touche d'espace.
    KeyboardComponent space_bar
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent OpenSerial
      Begin Experiment:
        import serial

        # https://www.biosemi.com/faq/USB%20Trigger%20interface%20cable.htm
        # port is a device name: depending on operating system.
        # e.g. /dev/ttyUSB0 on GNU/Linux or COM3 on Windows.

        ser = serial.Serial(
            port='\\\\.\\COM3',
            baudrate=115200,
            parity=serial.PARITY_NONE,
            stopbits=serial.STOPBITS_ONE, # 1
            bytesize=serial.EIGHTBITS # 8
        )

        if ser.isOpen():
            ser.close()
        ser.open()
        ser.isOpen()
    CodeComponent startEEG
      Begin Experiment:
        ser.write("254".encode()) # PauseOff
  Routine trial
    TextComponent fixcross
      color = black
      text = +
      startVal [time (s)] = 0.5
      letterHeight = 30
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    SoundComponent go_cue
      sound = A
      stopVal [duration (s)] = 0.5
      durationEstim = 0.5
      startVal [time (s)] = 0.0
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    KeyboardComponent next_trial
      forceEndRoutine = True
      startEstim = 5
      allowedKeys = 'n'
      startVal [time (s)] = 5
      store = nothing
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    CodeComponent sendTrigger
      Begin Experiment:
        ser.write("1".encode()) # Marks the start of the trial
  Routine ITI
    TextComponent wait
      color = black
      text = .
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine instr
  LoopInitiator blocks loopType="TrialHandler"
    loopType = random
    nReps = 4
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    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = 40
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      Routine trial
      Routine ITI
    LoopTerminator trials
    Routine pause
  LoopTerminator blocks
  Routine end
