PsychoPy2experiment version="1.84.2"
Settings
  Monitor = testMonitor
  color = #B8B8B8
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  Save csv file = True
  expName = heart_task
  Save excel file = True
  Units = pix
  Screen = 1
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Routines
  Routine trial
    CodeComponent BeginExp
      Begin Experiment:
        # Import functions from heart_santi.py
        import heart_santi


        # Start the monitor (will connect to 'COM4')
        Monitor = heart_santi.Heart_Monitor()


        # FOR ITI JITTERING

        # define relevant parameters:
        min_duration = 10  # number of frames
        max_duration = 60  #  4 seconds at 60 Hz
        number_of_trials = 96

        # get an array of random integers:
        ITIs = randint(low=min_duration, high=max_duration + 1, size=number_of_trials)

        # convert from a numpy array to a standard Python list if preferred:
        ITIs = list(ITIs)
    CodeComponent BeginTrial
      Begin Routine:
        # get the next ITI (assuming they are in a list):
        current_ITI = ITIs.pop()

        # manually record the ITI in the data for this trial:
        thisExp.addData('ITI', current_ITI)
    CodeComponent EachFrame
      Each Frame:
        # Check the USB port for recorded heartbeats

        Monitor.listen_for_beat()

        if frameN == 1:  # -2s
            Monitor.RR_intervals = ([])  # reset
        if frameN == 166:  # 0s
            Beats, BPM = Monitor.summary()
            trialLoop.addData("Beats_Pre",Beats)
            trialLoop.addData("BPM_Pre",BPM)
            Monitor.RR_intervals = ([])  # reset

        if frameN == 167:
            Monitor.RR_intervals = ([])  # reset
        if frameN == 413:   # +4s
            Beats, BPM = Monitor.summary()
            trialLoop.addData("Beats_Post",Beats)
            trialLoop.addData("BPM_Post",BPM)
            Monitor.RR_intervals = ([])  # reset
    TextComponent ITI
      color [set every repeat] = white
      stopVal [duration (frames)] = $current_ITI
      startEstim = 0
      startVal [frame N] = 0
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.01
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      text:
        Any text

        including line breaks
    TextComponent fixation
      color = black
      text = •
      stopVal [duration (frames)] = 30
      durationEstim = 0.5
      startEstim = 2
      startVal [frame N] = 120
      letterHeight = 40
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    ImageComponent scrambled
      stopVal [duration (frames)] = 15
      durationEstim = 0.25
      startEstim = 2.5
      startVal [frame N] = 150
      image = noise_face1_image2.jpg
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    ImageComponent subliminal
      stopVal [duration (frames)] = 1
      durationEstim = 0.016
      startEstim = 2.75
      startVal [frame N] = 166
      image [set every repeat] = $Subliminal_face
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    ImageComponent neutral
      stopVal [duration (frames)] = 6
      durationEstim = 0.100
      pos = (0, -15)
      startEstim = 2.766
      startVal [frame N] = 167
      image [set every repeat] = $Neutral_face
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    TextComponent text_2
      color = black
      stopVal [duration (frames)] = 180
      durationEstim = 3
      startEstim = 6.866
      startVal [frame N] = 413
      letterHeight = 20
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      text:
        Visage neutre (i)

        ou

        visage emotionnel (o)
    KeyboardComponent key_resp_2
      correctAns = $Correct
      storeCorrect = True
      stopVal [duration (frames)] = 180
      durationEstim = 3
      forceEndRoutine = True
      startEstim = 6.866
      allowedKeys = 'i','o'
      startVal [frame N] = 413
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  Routine instruction
    TextComponent Consigne
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 20
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      text:
        Deux visages vous seront présentés rapidement, de sorte que l'un des deux restera caché. Vous devrez indiquer si le visage caché était neutre ou émotionnel.

        Pour répondre, soyez attentifs à vos ressentis corporels. Certains visages pourraient avoir une influence légère sur votre rythme cardiaque.

        Si vous ne savez pas, essayez de deviner.
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent text
      color = black
      text = Merci!
      startVal [time (s)] = 0.0
      letterHeight = 20
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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Flow
  Routine instruction
  LoopInitiator trialLoop loopType="TrialHandler"
    conditionsFile = stimuli_micah.xlsx
    loopType = fullRandom
    nReps = 2
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    conditions:
      [{u'Subliminal_face': u'SHINEd_neutral_face1_image2.jpg', u'Correct': u'i', u'Neutral_face': u'SHINEd_neutral_face1_image2.jpg'},
      {u'Subliminal_face': u'SHINEd_neutral_face2_image2.jpg', u'Correct': u'i', u'Neutral_face': u'SHINEd_neutral_face1_image2.jpg'},
      {u'Subliminal_face': u'SHINEd_neutral_face3_image2.jpg', u'Correct': u'i', u'Neutral_face': u'SHINEd_neutral_face1_image2.jpg'},
      {u'Subliminal_face': u'SHINEd_neutral_face4_image2.jpg', u'Correct': u'i', u'Neutral_face': u'SHINEd_neutral_face1_image2.jpg'},
      {u'Subliminal_face': u'SHINEd_disgust_face1_image2.jpg', u'Correct': u'o', u'Neutral_face': u'SHINEd_neutral_face1_image2.jpg'},
      {u'Subliminal_face': u'SHINEd_disgust_face2_image2.jpg', u'Correct': u'o', u'Neutral_face': u'SHINEd_neutral_face1_image2.jpg'},
      {u'Subliminal_face': u'SHINEd_disgust_face3_image2.jpg', u'Correct': u'o', u'Neutral_face': u'SHINEd_neutral_face1_image2.jpg'},
      {u'Subliminal_face': u'SHINEd_disgust_face4_image2.jpg', u'Correct': u'o', u'Neutral_face': u'SHINEd_neutral_face1_image2.jpg'},
      {u'Subliminal_face': u'SHINEd_neutral_face1_image2.jpg', u'Correct': u'i', u'Neutral_face': u'SHINEd_neutral_face2_image2.jpg'},
      {u'Subliminal_face': u'SHINEd_neutral_face2_image2.jpg', u'Correct': u'i', u'Neutral_face': u'SHINEd_neutral_face2_image2.jpg'},
      {u'Subliminal_face': u'SHINEd_neutral_face3_image2.jpg', u'Correct': u'i', u'Neutral_face': u'SHINEd_neutral_face2_image2.jpg'}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
    Routine trial
  LoopTerminator trialLoop
  Routine end
