PsychoPy2experiment version="1.84.2"
Settings
  Monitor = testMonitor
  color = $[-1,-1,-1]
  Window size (pixels) = [800, 600]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  Save csv file = True
  expName = Exp.battements
  Save excel file = True
  Units = pix
  Screen = 1
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Routines
  Routine consigne
    TextComponent Start
      startVal [time (s)] = 0.0
      letterHeight = 20
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      text:
        Vous devez commencer a compter des que vous appuyez sur la barre d'espace. Vous devrez vous arretez des que l'experimentateur vous le dira.

        Appuyez sur espace des que vous etes pret(e).
    KeyboardComponent start_key
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fin
    TextComponent end
      text = Terminé ! 
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 30
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  Routine response
    KeyboardComponent battementsComptes
      forceEndRoutine = False
      allowedKeys = '1', '2', '3', '4', '5', '6', '7', '8', '9', '0'
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent spaceOK
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 4
      store = nothing
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    TextComponent instr
      text = Ecrivez le nombre de battements que vous avez pu compter et appuyez ensuite sur Espace.
      startVal [time (s)] = 0.0
      letterHeight = 20
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  Routine deux
    CodeComponent BeginRoutine
      Begin Routine:
        # Determine the block number and the number of target beats
        blNumber = myblockloop.thisN
        print(blNumber)
        if blNumber == 0:  # 0 indexed!!
            targetBeats = 150
        elif blNumber == 1:
            targetBeats = 120
        elif blNumber == 2:  # Stethoscope
            targetBeats = 140
        elif blNumber == 3:
            targetBeats = 130
        elif blNumber == 4:
            targetBeats = 100


        # Add trial info
        myblockloop.addData("targetBeats", targetBeats)
    TextComponent blocNr
      text [set every repeat] = $blNumber
      pos = (200, -200)
      startVal [time (s)] = 0.0
      letterHeight = 15
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    TextComponent title
      text = Block number (0-1-2-3-4):
      pos = (-75, -200)
      startVal [time (s)] = 0.0
      letterHeight = 15
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    CodeComponent EachFrame
      Each Frame:
        # Check Arduino each frame to see if heart beat
        Monitor.listen_for_beat()

        # Restart beat counts
        if t == 1.5:
            Monitor.RR_intervals = [()]

        # Keep track of beats and stop routine if target achieved
        if t >= 1.5:
            Beats = Monitor.counting()
            print(Beats)
            if Beats >= targetBeats:
                Monitor.RR_intervals = [()]
                continueRoutine = False
    PolygonComponent polygon
      fillColor = $[1.000,-1.000,-1.000]
      stopVal [duration (s)] = 3.0
      durationEstim = 1
      pos = (-250, 200)
      lineColor = $[1.000,-1.000,-1.000]
      startVal [time (s)] = 1.5
      size = (50, 50)
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    PolygonComponent polygon_2
      fillColor = $[1.000,-1.000,-1.000]
      stopVal [duration (s)] = 3.0
      pos = (-250, 200)
      lineColor = $[1.000,-1.000,-1.000]
      startVal [time (s)] = 30
      size = (50, 50)
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    PolygonComponent polygon_3
      fillColor = $[1.000,-1.000,-1.000]
      stopVal [duration (s)] = 3.0
      pos = [-250,200]
      lineColor = $[1.000,-1.000,-1.000]
      startVal [time (s)] = 60
      size = (50, 50)
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    PolygonComponent polygon_4
      fillColor = $[1.000,-1.000,-1.000]
      stopVal [duration (s)] = 3.0
      pos = (-250, 200)
      lineColor = $[1.000,-1.000,-1.000]
      startVal [time (s)] = 90
      size = (50, 50)
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  Routine consg
    TextComponent appuyer
      startVal [time (s)] = 0.0
      letterHeight = 20
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      text:
        Dans cette tache, vous allez devoir compter vos propres battements. Vous devrez realiser cet exercice sans toucher votre pouls et sans utiliser d'autres indicateurs directs.
        Si vous n'arrivez pas a identifier vos battements, continuez a compter sur base de ce que vous supposez etre votre rythme cardiaque.


        Appuyez sur espace pour continuer.
    KeyboardComponent resp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent BeginExp
      Begin Experiment:
        # Load heart Arduino class
        import heart_santi

        # Start monitor (COM4)
        Monitor = heart_santi.Heart_Monitor()
Flow
  Routine consg
  LoopInitiator myblockloop loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine consigne
    Routine deux
    Routine response
  LoopTerminator myblockloop
  Routine fin
